PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine p1
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    CodeComponent code
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        from inputs import devices, get_key

        def list_keyboards():
            """List all input devices and filter for keyboards."""
            print("Available input devices (keyboards):")
            keyboards = [device for device in devices if "keyboard" in device.name.lower()]
            for idx, keyboard in enumerate(keyboards):
                print(f"{idx}: {keyboard.name} (path: {keyboard})")
            return keyboards

        list_keyboards()

        def listen_to_keyboard(kb):
            """Listen for key presses from a specific keyboard device."""
            print(f"Listening to keyboard: {keyboard.name} (path: {keyboard.fn})")
            try:
                    events = kb.read()  # Read events from the specific device
                    for event in events:
                        if event.ev_type == "Key" and event.state == 1:
                            print(f"Key pressed from {keyboard.name}: {event.code}")
            except KeyboardInterrupt:
                print("\nExiting...")
      Begin Experiment:
        import serial

        port = serial.Serial("/dev/ttyUSB0", baudrate=115200)
        trigger_0 = int(10)
        trigger_1 = int(11)

        win0 = visual.Window(size=(1920, 1080), screen=1, fullscr=True)
        win0.checkTiming=False
        win1 = visual.Window(size=(1920, 1080), screen=2, fullscr=True)
        win1.checkTiming=False

        active_txt_0 = visual.TextStim(win0, text='Close your eyes and press the "a" button at the same time.\n' +
        'Count to 10  in your head, and then open your eyes release the "a" button')
        active_txt_1 = visual.TextStim(win1, text='Close your eyes and press the "l" button at the same time.\n' +
        'Count to 10  in your head, and then open your eyes release the "l" button')
        wait_txt = visual.TextStim(win1, text='The other player is about to close his eyes')
        polygon_on = visual.Polygon(win0, pos = (0.8, 0.8), size = 1, edges=5, color="white")
        polygon_off = visual.Polygon(win0, pos = (0.8, 0.8), size = 1, edges=5, color="black")

        win0.flip()
        win1.flip()

        import random
        is_left = random.choice([False, True])
      Begin Routine:
        wait_txt.setText('The other player is about to close his eyes')

        if is_left:
            active_txt_0.setAutoDraw(True)
            wait_txt.win = win1
            polygon_on.win = win0
            polygon_off.win = win1
        else:
            active_txt_1.setAutoDraw(True)
            wait_txt.win = win0
            polygon_on.win = win1
            polygon_off.win = win0

        wait_txt.setAutoDraw(True)
        win0.flip()
        win1.flip()
        clicked = False
      Each Frame:
        if  not clicked and key_resp_2.keys in ['a', 'l']:
            if is_left:
                port.write(trigger_0.to_bytes(1, 'big'))
            else:
                port.write(trigger_1.to_bytes(1, 'big'))
            clicked = True
            polygon_on.setAutoDraw(True)
            polygon_off.setAutoDraw(True)
            wait_txt.setText('The other player closed his eyes')
            win0.flip()
            win1.flip()
      End Routine:
        active_txt_0.setAutoDraw(False)
        active_txt_1.setAutoDraw(False)

        wait_txt.setAutoDraw(False)

        polygon_on.setAutoDraw(False)
        polygon_off.setAutoDraw(False)

        win0.flip()
        win1.flip()

        is_left = not is_left
    KeyboardComponent key_resp
      allowedKeys = 'a', 'l'
      disabled = True
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'a', 'l'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine start
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
  Routine pre
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    CodeComponent pre_code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychtoolbox import hid
      Begin Routine:
        import serial

        bufferSize = 10000
        port = serial.Serial("/dev/ttyUSB0", baudrate=115200)
        trigger_0 = int(10)
        trigger_1 = int(11)

        win0 = visual.Window(size=(1920, 1080),
            screen=0,
            fullscr=True)
        win0.checkTiming=False
        win1 = visual.Window(size=(1920, 1080),
            screen=2,
            fullscr=True)
        win1.checkTiming=False

        wait_txt = visual.TextStim(win0, text='The other player is about to close his eyes')
        fixation_txt = visual.TextStim(win0, text='+')
        ask_txt = visual.TextStim(win0, text="Press any key")
        word_txt = visual.TextStim(win0, text='hello')
        current_word = "hello"

        win0.flip()
        win1.flip()

        import random
        is_left = random.choice([False, True])

        dev_nums = [3,4,5,6,7,8,10, 15, 17, 18, 19, 20]
        devs = {
            3: hid.Keyboard(3),
            4: hid.Keyboard(4),
            5: hid.Keyboard(5),
            6: hid.Keyboard(6),
            7: hid.Keyboard(7),
            8: hid.Keyboard(8),
            10: hid.Keyboard(10),
            15: hid.Keyboard(15),
            17: hid.Keyboard(17),
            18: hid.Keyboard(18),
            19: hid.Keyboard(19),
            20: hid.Keyboard(20)
        }

        for num in dev_nums:
            devs[num]._create_queue(bufferSize, win_handle=None)
            devs[num].queue_start()
  Routine fixation
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    CodeComponent fixation_code
      Code Type = Auto->JS
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      Begin Routine:
        if is_left:
            wait_txt.win = win1
            fixation_txt.win = win0
        else:
            wait_txt.win = win0
            fixation_txt.win = win1

        fixation_txt.setAutoDraw(True)
        wait_txt.setAutoDraw(True)

        win0.flip()
        win1.flip()
      End Routine:
        fixation_txt.setAutoDraw(False)
        wait_txt.setAutoDraw(False)

        win0.flip()
        win1.flip()
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine word
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    CodeComponent code_word
      Code Type = Auto->JS
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      Begin Routine:
        word_txt.setText(current_word)
        if is_left:
            wait_txt.win = win1
            word_txt.win = win0
        else:
            wait_txt.win = win0
            word_txt.win = win1

        word_txt.setAutoDraw(True)
        wait_txt.setAutoDraw(True)

        win0.flip()
        win1.flip()
      Each Frame:
        i = 0
        for dev in devs:
            if dev.flush(1):
                print(num[i])
            i += 1

        if is_left:
            current_dev = dev10
        else:
            current_dev = dev14

        if is_left:
            while dev10.flush(1):
                evt, remaining = dev.queue_get_event()
                pressed = bool(evt["Pressed"])
                keycode = int(evt["Keycode"])
                if (not pressed) and (keycode == 66):
                    continueRoutine = False
      End Routine:
        word_txt.setAutoDraw(False)
        wait_txt.setAutoDraw(False)

        win0.flip()
        win1.flip()
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent word_keyboard
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine trial_end
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        is_left = not is_left

        win0.flip()
        win1.flip()
  Routine sync_kb_1
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    CodeComponent sync_kb_1_code
      Code Type = Auto->JS
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      Begin Routine:
        if is_left:
            wait_txt.win = win1
            ask_txt.win = win0
        else:
            wait_txt.win = win0
            ask_txt.win = win1

        ask_txt.setAutoDraw(True)
        wait_txt.setAutoDraw(True)

        p1_kb = 0
      Each Frame:
        for num in dev_nums:
            while devs[num].flush(1):
                p1_kb = num
            if p1_kb > 0:
                continueRoutine = False
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sync_kb_2
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Flow
  Routine pre
  Routine sync_kb_1
  Routine sync_kb_2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation
    Routine word
    Routine p1
    Routine trial_end
  LoopTerminator trials
